PsychoPy2experiment version="1.90.0"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  expName = FIRST ONE
  Screen = 1
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Routines
  Routine instrukcje
    TextComponent intrukcjetekstowe
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Pamiętaj!
        Wybierasz kolor liter, olewasz słowa.

        lewa strzałka - czerwony
        dolna strzałka - zielony
        prawa strzałka - niebieski
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    TextComponent target
      color [set every repeat] = $color
      stopVal [duration (s)] = 4
      text [set every repeat] = $word
      startVal [time (s)] = 0.5
      font = Times New Roman
      letterHeight = 0.7
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    KeyboardComponent response
      correctAns = $odpowiedz
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left', 'right', 'down'
      startVal [time (s)] = 0.5
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    TextComponent instrukcjewtrakcie
      pos = (0.5, 0.5)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        lewa strzałka - czerwony
        dolna strzałka - zielony
        prawa strzałka - niebieski
Flow
  Routine instrukcje
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = warunki.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('word', u'czerwony'), ('color', u'czerwony'), ('zgodnosc', 1), ('odpowiedz', u'lewo')]),
      OrderedDict([('word', u'czerwony'), ('color', u'zielony'), ('zgodnosc', 0), ('odpowiedz', u'd\xf3\u0142')]),
      OrderedDict([('word', u'zielony'), ('color', u'zielony'), ('zgodnosc', 1), ('odpowiedz', u'd\xf3\u0142')]),
      OrderedDict([('word', u'zielony'), ('color', u'niebieski'), ('zgodnosc', 0), ('odpowiedz', u'prawo')]),
      OrderedDict([('word', u'niebieski'), ('color', u'niebieski'), ('zgodnosc', 1), ('odpowiedz', u'prawo')]),
      OrderedDict([('word', u'niebieski'), ('color', u'czerwony'), ('zgodnosc', 0), ('odpowiedz', u'lewo')])]
    Routine trial
  LoopTerminator trials
